; Parameterized HALF-IMS SIMION GEM file

; Import the electrodes functions necessary to generate geometries
simion.import("geometry.lua")

; Cascades to determine geometries, paper indicates 220 long-short electrode pairs
# numElectrodePairs = get_electrode_pair_count()

# -- dx is the axial x-offset in grid units.
; Set scaling of PA to 1 um per grid unit
; which will essentially minimize the electrode height
; to one grid unit, but attempting to use the ideal parameter
; of 5 nm causes SIMION to complain about system memory. 
# local dx = get_grid_x_spacing()
# local dy = get_grid_y_spacing()
# local dz = get_grid_z_spacing()

; Should equate to 15/40 nm per paper, set in grid units
# local electrodeHeight = get_electrode_height()

; Spacing to give before electrodes start, set in grid units
# local flowChannelOffset = get_flow_channel_offset()

; Define parameters for the shutter/gate electrodes
# local shutterElectrodeCount = get_shutter_electrode_count()

; Unclear what this should be per the paper, but set in grid units
# local shutterElectrodeLength =  get_shutter_electrode_length()

; Unclear what this should be per the paper, but set in grid units
# local shutterElectrodeSpacing = get_shutter_electrode_spacing()

; Unclear what this should be per the paper, but set in grid units
# local firstGroundLength = get_first_ground_pad_length()

; Unclear what this should be per the paper, but set in grid units
# local secondGroundLength = get_second_ground_pad_length()

; Total shutter gate grid units
# local shutterElectrodePattern = get_shutter_pattern_length()

; Define parameters for the long and short electrodes which make up the HALF-IMS channel
; Should equate to 10 um per paper, but set in grid units
# local electrodeSpacing = get_electrode_spacing()

; Should equate to 10 um per paper, but set in grid units
# local electrodeLengthShort = get_short_electrode_length()

; Should equate to 50 um per paper, but set in grid units
# local electrodeLengthLong = get_long_electrode_length()

; The electrode pattern to lay down for every pair number
# local electrodePattern = 2*electrodeSpacing + electrodeLengthShort + electrodeLengthLong

; Define parameters for the bias ring and detector pad
; Unclear what this should be per paper, but set in grid units
# local biasRingLength =  get_bias_ring_length()

; Unclear what this should be per paper, but set in grid units
# local biasRingSpacing = get_bias_ring_spacing()

; Unclear what this should be per paper, but set in grid units
# local detectorPadLength = get_detector_pad_length()

; Unclear what this should be per paper, but set in grid units
# local detectorPadSpacing = get_detector_pad_spacing() + biasRingLength + 2*biasRingSpacing

# local xPoints = get_device_x_length()
# local yPoints = get_device_y_length()
# local zPoints = get_device_z_length()

# local electrodeYPosition = yPoints-electrodeHeight

; Create a grid scaled to dx, dy, and dz values
pa_define(xPoints+1,yPoints+1,zPoints+1, planar, none, electrostatic,,dx,dy,dz)

;Center at (0,0,0) with no isotropic scaling parameter provided, 0 azimuth, 0 elevation, 0 rotation angles applied, and anisotropic scaling parameters provided
locate (0,0,0,,0,0,0,dx,dy,dz){

    ; Generate the shutter electrodes
    electrode(1) { corner_box(flowChannelOffset, 0, shutterElectrodeLength, electrodeHeight) }
    electrode(2) { corner_box(flowChannelOffset, electrodeYPosition, shutterElectrodeLength, electrodeHeight) } 

    ; Generate the ground ring electrodes
    electrode(3) { corner_box(shutterElectrodeSpacing + shutterElectrodeLength + flowChannelOffset, 0, firstGroundLength, electrodeHeight) }
    electrode(4) { corner_box(shutterElectrodeSpacing + shutterElectrodeLength + flowChannelOffset, electrodeYPosition, firstGroundLength, electrodeHeight) } 

    ; Loop to generate the electrodes along the channel using a row-major format for the electrode potential so that they
    ; are generated individually
    for i=0,(numElectrodePairs-1) do
	    electrode(4*i+1+shutterElectrodeCount) { corner_box(i*electrodePattern + shutterElectrodePattern, 0, electrodeLengthLong,electrodeHeight) }
	    electrode(4*i+2+shutterElectrodeCount) { corner_box(i*electrodePattern + shutterElectrodePattern, electrodeYPosition, electrodeLengthLong,electrodeHeight) }
	    electrode(4*i+3+shutterElectrodeCount) { corner_box(i*electrodePattern + electrodeLengthLong+electrodeSpacing + shutterElectrodePattern, 0, electrodeLengthShort,electrodeHeight) }
	    electrode(4*i+4+shutterElectrodeCount) { corner_box(i*electrodePattern + electrodeLengthLong+electrodeSpacing + shutterElectrodePattern, electrodeYPosition, electrodeLengthShort,electrodeHeight) }
    end

    ; Calculate the total number of electrodes to offset final electrodes
    # local totalElectrodes = 4*(numElectrodePairs-1)+4+shutterElectrodeCount
    # local totalElectrodeOffset = (numElectrodePairs-1)*electrodePattern + shutterElectrodePattern + electrodePattern

    ; Generate the ground ring electrodes
    electrode(totalElectrodes + 1) { corner_box( totalElectrodeOffset + biasRingSpacing, 0, secondGroundLength, electrodeHeight) }
    electrode(totalElectrodes + 2) { corner_box( totalElectrodeOffset + biasRingSpacing, electrodeYPosition, secondGroundLength, electrodeHeight) } 

    ; Generate the bias ring electrodes
    electrode(totalElectrodes + 3) { corner_box( totalElectrodeOffset + 2*biasRingSpacing + secondGroundLength, 0, biasRingLength, electrodeHeight) }
    electrode(totalElectrodes + 4) { corner_box( totalElectrodeOffset + 2*biasRingSpacing + secondGroundLength, electrodeYPosition, biasRingLength, electrodeHeight) }

    ; Generate detector pad electrodes
    electrode(totalElectrodes + 5) { corner_box( totalElectrodeOffset + detectorPadSpacing + secondGroundLength, 0, detectorPadLength, electrodeHeight) }
    electrode(totalElectrodes + 6) { corner_box( totalElectrodeOffset + detectorPadSpacing + secondGroundLength, electrodeYPosition, detectorPadLength, electrodeHeight) }

}